PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1200, 800]
  color = 0.0039, 0.0039, 0.0039
  expName = Intentional Binding
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = 1.0000, 1.0000, 1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beep
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = $freq
      speakerIndex = 2.0
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the beep sound (0-999); Click submit after entering the value.
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions for Intentional Binding-2.xlsx
    loopType = random
    nReps = 34
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    conditions:
      [{'delay': 0.1, 'freq': 400.0, 'conditions': 'unexp'},
      {'delay': 0.4, 'freq': 400.0, 'conditions': 'unexp'},
      {'delay': 0.7, 'freq': 400.0, 'conditions': 'unexp'},
      {'delay': 0.1, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.4, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.7, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.1, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.4, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.7, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.1, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.4, 'freq': 1000.0, 'conditions': 'exp'},
      {'delay': 0.7, 'freq': 1000.0, 'conditions': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
