PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 800]
  expName = Canli_replication
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine image_rating
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    CodeComponent loadImages
      Code Type = Auto->JS
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      Begin Experiment:
        from random import shuffle
        from pathlib import Path

        # Point to your 'photos' folder
        image_folder = Path('photos')

        # Get all image files (jpg/png/jpeg)
        image_list = [f for f in image_folder.glob('*.jpg')] + \
                     [f for f in image_folder.glob('*.png')] + \
                     [f for f in image_folder.glob('*.jpeg')]

        # Randomize their order
        shuffle(image_list)

        # Convert to strings so PsychoPy can use them
        image_paths = [str(f) for f in image_list]
      Begin Routine:
        # Reset variables every trial
        event.clearEvents()  # ensures no leftover keys from previous image
        rating = None
        rating_time = None
        fixation.color = 'white'

        # Select current image
        imageFile = image_paths[trials.thisN]
      Each Frame:
        # Only allow responses after the image has disappeared
        if image.status == FINISHED:
            if rating is None:
                keys = event.getKeys(keyList=['1', '2', '3', '4'])
                if keys:
                    rating = keys[-1]
                    rating_time = clock.getTime()
                    fixation.color = 'green'

        # Keep feedback visible for 0.5 s, then revert
        if rating_time is not None:
            if clock.getTime() - rating_time > 0.5:
                fixation.color = 'white'

        # Ignore all keys during image display
        event.clearEvents(eventType='keyboard')
      End Routine:
        from pathlib import Path

        # Save key data
        thisExp.addData('trial_num', trials.thisN + 1)
        thisExp.addData('image_name', Path(imageFile).name)
        thisExp.addData('rating', rating if rating is not None else 'NA')

        # Optional response info
        thisExp.addData('response_given', 1 if rating else 0)
    ImageComponent image
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent rating_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
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  Routine intro_instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will see a series of photographs, one at a time. Your task is to rate how emotionally intense each picture feels to you.

        Use the number keys from 1 to 4:
        1 = not emotionally intense at all
        4 = extremely emotionally intense

        There are no right or wrong answers — please respond based on your immediate feeling.


        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_thanks
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    TextComponent thankyou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for taking part in the experiment!
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Flow
  Routine intro_instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 48
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    Routine image_rating
  LoopTerminator trials
  Routine end_thanks
