PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1200, 800]
  color = 0.0039, 0.0039, 0.0039
  expName = Phase 2 Canli Replication
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Reset response variables for each new trial
        response_label = 'none'
        response_code = 0
      End Routine:
        # Check if a click was made
        if len(mouse_resp.clicked_name):
            clicked = mouse_resp.clicked_name[0]

            # --- Determine response ---
            if clicked == 'remember_box':
                response_label = 'Remembered'
                response_code = 3
            elif clicked == 'familiar_box':
                response_label = 'Familiar'
                response_code = 2
            elif clicked == 'forgotten_box':
                response_label = 'Forgotten'
                response_code = 1

            # --- Visual feedback (blue blink) ---
            # Save original colors
            remember_box_color = remember_box.fillColor
            familiar_box_color = familiar_box.fillColor
            forgotten_box_color = forgotten_box.fillColor

            # Turn the clicked box BLUE
            if clicked == 'remember_box':
                remember_box.fillColor = 'blue'
            elif clicked == 'familiar_box':
                familiar_box.fillColor = 'blue'
            elif clicked == 'forgotten_box':
                forgotten_box.fillColor = 'blue'

            # Draw boxes again to show color change
            win.flip()
            core.wait(0.3)  # blink duration; can change to 0.5 if you prefer a slower blink

            # Restore original colors
            remember_box.fillColor = remember_box_color
            familiar_box.fillColor = familiar_box_color
            forgotten_box.fillColor = forgotten_box_color

        # --- Save response data ---
        thisExp.addData('response_label', response_label)
        thisExp.addData('response_code', response_code)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent stim_image
      image [set every repeat] = $'phase2_images/' + image_name
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 4.0
      text = Have you seen this image before?
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    PolygonComponent remember_box
      fillColor = white
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [time (s)] = 4.0
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    PolygonComponent familiar_box
      fillColor = white
      pos = (0, -0.3)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [time (s)] = 4.0
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    PolygonComponent forgotten_box
      fillColor = white
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [time (s)] = 4.0
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    TextComponent remember_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 4.0
      text = Remembered
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    TextComponent familiar_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 4.0
      text = Familiar
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    TextComponent forgotten_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 4.0
      text = Forgotten
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    MouseComponent mouse_resp
      clickable = remember_box, familiar_box, forgotten_box
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 4.0
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  Routine intro_instructions
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    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome back!

        In this task, you will see several pictures, one at a time. Some of these were shown to you earlier, and some are new.

        After each picture, three boxes will appear:

        Remembered - You clearly remember seeing this picture before.

        Familiar - The picture feels familiar, but you are not sure.

        Forgotten - You do not remember seeing this picture earlier.

        Click the option that best matches how you feel about the picture. There are no right or wrong answers - just go with your first instinct.

        Press the SPACEBAR to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_thanks
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for taking part in the experiment!
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Flow
  Routine intro_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = phase2_conditions - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image_name', 'Dead bodies 1.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'War 6.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Severed finger 1.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Police 2.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Soldiers 8.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Child labor 2.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Football player 1.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Exercise 3.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Band 1.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Rafting 6.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Gazing 2.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'School 1.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Feces 2.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Shot 3.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Car accident 2.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Ambulance 1.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Plane crash 1.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Gun 5.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Bark 6.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Alcohol 6.jpg'), ('condition', 'old')]),
      OrderedDict([('image_name', 'Sidewalk 2.jpg'), ('condition', 'old')])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
    Routine trial
  LoopTerminator trials
  Routine end_thanks
