PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 800]
  expName = Word Priming Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/vineesmacbook/Desktop/PsychoPy/Word Priming/study_conditions - Sheet1.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_word', 'book')]),
      OrderedDict([('Study_word', 'cushion')]),
      OrderedDict([('Study_word', 'phone ')]),
      OrderedDict([('Study_word', 'marble')]),
      OrderedDict([('Study_word', 'board')]),
      OrderedDict([('Study_word', 'laptop')]),
      OrderedDict([('Study_word', 'chart')]),
      OrderedDict([('Study_word', 't-shirt')]),
      OrderedDict([('Study_word', 'mouse')]),
      OrderedDict([('Study_word', 'pastry')]),
      OrderedDict([('Study_word', 'case')]),
      OrderedDict([('Study_word', 'cruise')]),
      OrderedDict([('Study_word', 'police')]),
      OrderedDict([('Study_word', 'keys')]),
      OrderedDict([('Study_word', 'poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/vineesmacbook/Desktop/PsychoPy/Word Priming/test_conditions - Sheet1-2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'l_pt_p'), ('Reference', 'laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('Reference', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 't_hi_t'), ('Reference', 't-shirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_se'), ('Reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_str_'), ('Reference', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('Reference', 'case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ruis_'), ('Reference', 'cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_li_e'), ('Reference', 'police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'k_y_'), ('Reference', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_st_r'), ('Reference', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('Reference', 'board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('Reference', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('Reference', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_oo_'), ('Reference', 'book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('Reference', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_'), ('Reference', 'table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('Reference', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('Reference', 'vase'), ('old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
